---
API: 3
OpenSesame: 4.1.9
Platform: nt
---
set width 1920
set title "Neues Experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\sschu\\Documents\\GitHub\\ET_course_project_gender-bias\\experiment"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#232323"

define sketchpad ending_sketchpad
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=True text="Danke, dass du an dem Experiment teilgenommen hast." x=-32 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run eyetracker_calibration True
	run pygaze_start_recording True
	run instruction True
	run instruction_pygaze_log True
	run liste_auswahl True
	run trial_loop True
	run ending_sketchpad True
	run pygaze_stop_recording True
	run logger True

define pygaze_init eyetracker_calibration
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define sketchpad fixation
	set margins "100;100;100;100"
	set duration keypress
	set description "Stimuli anzeigen"
	draw line color=white penwidth=7 show_if=True x1=-832 x2=-768 y1=-320 y2=-320 z_index=0
	draw line color=white penwidth=7 show_if=True x1=-800 x2=-800 y1=-352 y2=-288 z_index=0

define pygaze_log fixation_pygaze_log
	set throttle 42
	set msg fixation_onset
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad instruction
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=True text="In jedem Durchgang erscheint zunächst ein Fixationskreuz. Anschließend wird ein Text angezeigt.<br /><br />Bitte lesen Sie jeden Text aufmerksam und in Ihrem natürlichen Lesetempo.<br />Wenn Sie den Text vollständig gelesen haben, drücken Sie eine Taste, um zum nächsten Bildschirm zu gelangen.<br /><br />Danach wird eine kurze Verständnisfrage gestellt." x=0 y=0 z_index=0

define pygaze_log instruction_pygaze_log
	set throttle 42
	set msg instruction_onset
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define inline_script list_filter
	set description "Führt Python-Code aus"
	___run__
	if int(var.list) != int(var.selected_list):
	    var.skip_trial = 1
	else:
	    var.skip_trial = 0
	__end__
	set _prepare ""

define inline_script liste_auswahl
	set description "Führt Python-Code aus"
	___run__
	# Teilnehmer bekommt Liste 1
	var.selected_list = 3
	
	# Teilnehmer bekommt random Liste
	#import random
	#var.selected_list = random.randint(1,16)
	__end__
	set _prepare ""

define logger logger
	set description "Protokolliert experimentelle Daten"
	set auto_log yes

define sketchpad new_14_sketchpad
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=True text="[loesung_text]" x=0 y=0 z_index=0

define inline_script new_inline_script
	set description "Führt Python-Code aus"
	set _run "eyetracker.calibrate()"
	set _prepare ""

define pygaze_start_recording pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker out of recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define pygaze_log question_pygaze_log
	set throttle 42
	set msg text_onset
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad question_sketchpad
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=39 html=yes show_if=True text="Um welches Thema ging es in der vorherigen Situation?" x=0 y=0 z_index=0

define sketchpad sentence
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=39 html=yes show_if=True text="[sentence_text]" x=-763 y=-320 z_index=0

define pygaze_log sentence_pygaze_log
	set throttle 42
	set msg "sentence_onset[sentence_text]"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define inline_script sentence_script
	set description "Executes Python code"
	___run__
	from openexp.keyboard import keyboard
	from openexp.canvas import canvas
	import re
	
	my_keyboard = keyboard(exp)
	
	
	# Bildschirm Settings
	
	
	width, height = exp.resolution()
	
	font_size = 39
	font_family = "mono"
	
	margin = 150
	word_spacing = 25
	
	box_width = width - (2 * margin)
	
	text_start_x = -(box_width / 2)
	text_start_y = -height / 2 + 250
	
	line_height_factor = 3.0
	line_spacing = int(font_size * line_height_factor)
	
	
	# Fixation Kreuz platzierung
	
	
	fixation_canvas = canvas(exp)
	
	cross_size = 50
	
	cross_x = text_start_x
	cross_y = text_start_y + (font_size / 2)
	
	fixation_canvas.line(
	    cross_x - cross_size/2,
	    cross_y,
	    cross_x + cross_size/2,
	    cross_y,
	    penwidth=4,
	    color='white'
	)
	
	fixation_canvas.line(
	    cross_x,
	    cross_y - cross_size/2,
	    cross_x,
	    cross_y + cross_size/2,
	    penwidth=4,
	    color='white'
	)
	
	fixation_canvas.show()
	
	eyetracker.log("fixation_onset")
	
	
	import math
	
	# Startzeit
	t0 = clock.time()
	
	# Position des Fixationskreuzes
	centre = (
	    width/2 + cross_x,
	    height/2 + cross_y
	)
	
	central_fixation = False
	
	while not central_fixation:
	
	    gazepos = eyetracker.sample()
	
	    # Manche Dummy-Tracker liefern None
	    if gazepos is not None:
	
	        d = math.sqrt(
	            (gazepos[0] - centre[0])**2 +
	            (gazepos[1] - centre[1])**2
	        )
	
	        if d < 100:
	            central_fixation = True
	
	
	
	# RECALIBRATION
	# Fixierung kommt nicht nach 10 Sekunden -> neu kalibrierung -> fixations kreuz
	
	    # Timeout nach 10 Sekunden
	    if clock.time() - t0 > 10000:
	        eyetracker.log("fixation_timeout")
	        eyetracker.calibrate()
	        eyetracker.log("recalibration_fixation")
	        
	        # Fixationskreuz nach Kalibrierung erneut anzeigen
	        fixation_canvas.show()
	
	        # Timer neu starten
	        t0 = clock.time()
	
	        continue
	
	# 
	# # Lade Satz
	# 
	
	# kurze Pause wie im alten Experiment
	clock.sleep(1000)
	
	
	sentence = var.sentence_text
	
	# RN und AN aus Tabelle
	
	rn_text = str(var.RN)
	an_text = str(var.AN)
	
	var.rn_text = rn_text
	var.an_text = an_text
	
	# Ersetze Tags durch Tabellenwerte
	
	display_sentence = re.sub(
	    r"<RN>.*?</RN>",
	    rn_text,
	    sentence
	)
	
	display_sentence = re.sub(
	    r"<AN>.*?</AN>",
	    an_text,
	    display_sentence
	)
	
	# Zeichne Text
	
	c = canvas(exp)
	
	position_x = text_start_x
	position_y = text_start_y
	
	current_line = 1
	
	rn_found = False
	an_found = False
	
	rn_box = None
	an_box = None
	
	
	var.rn_x1 = "NA"
	var.rn_y1 = "NA"
	var.rn_x2 = "NA"
	var.rn_y2 = "NA"
	
	var.an_x1 = "NA"
	var.an_y1 = "NA"
	var.an_x2 = "NA"
	var.an_y2 = "NA"
	
	var.spill_x1 = "NA"
	var.spill_y1 = "NA"
	var.spill_x2 = "NA"
	var.spill_y2 = "NA"
	
	
	words = display_sentence.split()
	
	for word in words:
	
	    clean_word = word.strip(".,;:!?")
	
	    try:
	        word_width, word_height = c.text_size(word)
	    except:
	        # Fallback falls text_size Probleme macht
	        word_width = len(word) * (font_size * 0.55)
	        word_height = font_size
	
	    current_line_width = position_x - text_start_x
	
	    # Automatischer Zeilenumbruch
	    if current_line_width + word_width > box_width:
	
	        position_x = text_start_x
	        position_y += line_spacing
	        current_line += 1
	
	    # Wort zeichnen
	    c.text(
	        text=word,
	        center=False,
	        x=position_x,
	        y=position_y,
	        color="white",
	        font_size=font_size,
	        font_family=font_family,
	        wrap=False
	    )
	
	    # RN AOI
	    if clean_word.lower() == rn_text.lower() and not rn_found:
	
	        rn_box = {
	            "x1": position_x,
	            "y1": position_y,
	            "x2": position_x + word_width,
	            "y2": position_y + word_height,
	            "width": word_width,
	            "height": word_height,
	            "line": current_line
	        }
	
	        rn_found = True
	
	    # AN AOI
	    if clean_word.lower() == an_text.lower() and not an_found:
	
	        an_box = {
	            "x1": position_x,
	            "y1": position_y,
	            "x2": position_x + word_width,
	            "y2": position_y + word_height,
	            "width": word_width,
	            "height": word_height,
	            "line": current_line
	        }
	
	        an_found = True
	
	    position_x += word_width + word_spacing
	    
	    
	    
	# Position der letzten Textzeile merken
	last_line_y = position_y
	
	# Bereiche Role Noun Speichern
	
	if rn_box is not None:
	
	    var.rn_x1 = rn_box["x1"]
	    var.rn_y1 = rn_box["y1"]
	    var.rn_x2 = rn_box["x2"]
	    var.rn_y2 = rn_box["y2"]
	
	    var.rn_width = rn_box["width"]
	    var.rn_height = rn_box["height"]
	    var.rn_line = rn_box["line"]
	
	# Bereiche Anaphor Speichern
	
	if an_box is not None:
	
	    var.an_x1 = an_box["x1"]
	    var.an_y1 = an_box["y1"]
	    var.an_x2 = an_box["x2"]
	    var.an_y2 = an_box["y2"]
	
	    var.an_width = an_box["width"]
	    var.an_height = an_box["height"]
	    var.an_line = an_box["line"]
	
	# Spillover AOI (anschließend an Anaphor)
	
	spill_box = None
	
	if an_box is not None:
	    spill_box = {
	        "x1": an_box["x2"],
	        "y1": an_box["y1"],
	        "x2": an_box["x2"] + an_box["width"],
	        "y2": an_box["y2"],
	        "width": an_box["width"],
	        "height": an_box["height"],
	        "line": an_box["line"]
	    }
	    
	    var.spill_x1 = spill_box["x1"]
	    var.spill_y1 = spill_box["y1"]
	    var.spill_x2 = spill_box["x2"]
	    var.spill_y2 = spill_box["y2"]
	
	    var.spill_width = spill_box["width"]
	    var.spill_height = spill_box["height"]
	    var.spill_line = spill_box["line"]
	
	
	
	
	# Canvas anzeigen
	
	
	c.show()
	
	eyetracker.log("sentence_onset")
	
	
	# Anzeigen wo RN und AN ist
	
	
	if rn_box is not None:
	    print("RN:", rn_box)
	
	if an_box is not None:
	    print("AN:", an_box)
	    
	if spill_box is not None:
	    print("SPILLOVER:", spill_box)
	
	
	# Waiting for response or recalibration
	
	
	while True:
	
	    key, timestamp = my_keyboard.get_key()
	
	    if key == 'p':
	
	        eyetracker.calibrate()
	
	        c.show()
	
	        eyetracker.log("recalibration")
	        #kein mehrfaches kalibrieren
	        clock.sleep(200)
	
	        continue
	
	    break
	
	var.response_key = key
	var.response_time = timestamp
	__end__
	set _prepare ""

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Führt wiederholt ein anderes Element aus"
	set cycles 108
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 item 1
	setcycle 0 list 1
	setcycle 0 sentence_text "Bei einer Podiumsdiskussion an der Universität wird über aktuelle gesellschaftliche Themen gesprochen. Die <RN>Studenten</RN> müssten wieder stärker leistungsorientiert gefördert werden, doch die Mehrheit dieser dort teilnehmenden <AN>Frauen</AN> kritisieren die neuen Anforderungen. Die weitere Entwicklung bleibt Gegenstand öffentlicher Debatten."
	setcycle 0 RN "<RN>Studenten</RN>"
	setcycle 0 AN "<AN>Männer</AN>"
	setcycle 0 Code C1
	setcycle 1 item 1
	setcycle 1 list 2
	setcycle 1 sentence_text "Bei einer Podiumsdiskussion an der Universität wird über aktuelle gesellschaftliche Themen gesprochen. Die <RN>Studenten</RN> müssten wieder stärker leistungsorientiert gefördert werden, doch die Mehrheit dieser dort teilnehmenden <AN>Frauen</AN> kritisieren die neuen Anforderungen. Die weitere Entwicklung bleibt Gegenstand öffentlicher Debatten."
	setcycle 1 RN "<RN>Studenten</RN>"
	setcycle 1 AN "<AN>Frauen</AN>"
	setcycle 1 Code C2
	setcycle 2 item 1
	setcycle 2 list 3
	setcycle 2 sentence_text "Bei einer Podiumsdiskussion an der Universität wird über aktuelle gesellschaftliche Themen gesprochen. Die <RN>Studenten</RN> müssten wieder stärker leistungsorientiert gefördert werden, doch die Mehrheit dieser dort teilnehmenden <AN>Frauen</AN> kritisieren die neuen Anforderungen. Die weitere Entwicklung bleibt Gegenstand öffentlicher Debatten."
	setcycle 2 RN "<RN>Studentinnen</RN>"
	setcycle 2 AN "<AN>Männer</AN>"
	setcycle 2 Code C3
	setcycle 3 item 1
	setcycle 3 list 4
	setcycle 3 sentence_text "Bei einer Podiumsdiskussion an der Universität wird über aktuelle gesellschaftliche Themen gesprochen. Die <RN>Studenten</RN> müssten wieder stärker leistungsorientiert gefördert werden, doch die Mehrheit dieser dort teilnehmenden <AN>Frauen</AN> kritisieren die neuen Anforderungen. Die weitere Entwicklung bleibt Gegenstand öffentlicher Debatten."
	setcycle 3 RN "<RN>Studentinnen</RN>"
	setcycle 3 AN "<AN>Frauen</AN>"
	setcycle 3 Code C4
	setcycle 4 item 1
	setcycle 4 list 5
	setcycle 4 sentence_text "Bei einer Podiumsdiskussion an der Universität wird über aktuelle gesellschaftliche Themen gesprochen. Die <RN>Studenten</RN> müssten wieder stärker leistungsorientiert gefördert werden, doch die Mehrheit dieser dort teilnehmenden <AN>Frauen</AN> kritisieren die neuen Anforderungen. Die weitere Entwicklung bleibt Gegenstand öffentlicher Debatten."
	setcycle 4 RN "<RN>Student*innen</RN>"
	setcycle 4 AN "<AN>Männer</AN>"
	setcycle 4 Code C5
	setcycle 5 item 1
	setcycle 5 list 6
	setcycle 5 sentence_text "Bei einer Podiumsdiskussion an der Universität wird über aktuelle gesellschaftliche Themen gesprochen. Die <RN>Studenten</RN> müssten wieder stärker leistungsorientiert gefördert werden, doch die Mehrheit dieser dort teilnehmenden <AN>Frauen</AN> kritisieren die neuen Anforderungen. Die weitere Entwicklung bleibt Gegenstand öffentlicher Debatten."
	setcycle 5 RN "<RN>Student*innen</RN>"
	setcycle 5 AN "<AN>Frauen</AN>"
	setcycle 5 Code C6
	setcycle 6 item 2
	setcycle 6 list 1
	setcycle 6 sentence_text "Im Rahmen einer Gesprächsrunde im Gesundheitswesen wird derzeit über aktuelle gesellschaftliche Herausforderungen diskutiert. Die <RN>Pflegekräfte</RN> verdienen bessere Arbeitsbedingungen und benötigen langfristig mehr Unterstützung, doch diese <AN>Männer</AN> fühlen sich politisch nicht ausreichend unterstützt. Die nächsten Schritte werden derzeit kontrovers diskutiert."
	setcycle 6 RN "<RN>Pfleger</RN>"
	setcycle 6 AN "<AN>Frauen</AN>"
	setcycle 6 Code C2
	setcycle 7 item 2
	setcycle 7 list 2
	setcycle 7 sentence_text "Im Rahmen einer Gesprächsrunde im Gesundheitswesen wird derzeit über aktuelle gesellschaftliche Herausforderungen diskutiert. Die <RN>Pflegekräfte</RN> verdienen bessere Arbeitsbedingungen und benötigen langfristig mehr Unterstützung, doch diese <AN>Männer</AN> fühlen sich politisch nicht ausreichend unterstützt. Die nächsten Schritte werden derzeit kontrovers diskutiert."
	setcycle 7 RN "<RN>Pflegerinnen</RN>"
	setcycle 7 AN "<AN>Männer</AN>"
	setcycle 7 Code C3
	setcycle 8 item 2
	setcycle 8 list 3
	setcycle 8 sentence_text "Im Rahmen einer Gesprächsrunde im Gesundheitswesen wird derzeit über aktuelle gesellschaftliche Herausforderungen diskutiert. Die <RN>Pflegekräfte</RN> verdienen bessere Arbeitsbedingungen und benötigen langfristig mehr Unterstützung, doch diese <AN>Männer</AN> fühlen sich politisch nicht ausreichend unterstützt. Die nächsten Schritte werden derzeit kontrovers diskutiert."
	setcycle 8 RN "<RN>Pflegerinnen</RN>"
	setcycle 8 AN "<AN>Frauen</AN>"
	setcycle 8 Code C4
	setcycle 9 item 2
	setcycle 9 list 4
	setcycle 9 sentence_text "Im Rahmen einer Gesprächsrunde im Gesundheitswesen wird derzeit über aktuelle gesellschaftliche Herausforderungen diskutiert. Die <RN>Pflegekräfte</RN> verdienen bessere Arbeitsbedingungen und benötigen langfristig mehr Unterstützung, doch diese <AN>Männer</AN> fühlen sich politisch nicht ausreichend unterstützt. Die nächsten Schritte werden derzeit kontrovers diskutiert."
	setcycle 9 RN "<RN>Pfleger*innen</RN>"
	setcycle 9 AN "<AN>Männer</AN>"
	setcycle 9 Code C5
	setcycle 10 item 2
	setcycle 10 list 5
	setcycle 10 sentence_text "Im Rahmen einer Gesprächsrunde im Gesundheitswesen wird derzeit über aktuelle gesellschaftliche Herausforderungen diskutiert. Die <RN>Pflegekräfte</RN> verdienen bessere Arbeitsbedingungen und benötigen langfristig mehr Unterstützung, doch diese <AN>Männer</AN> fühlen sich politisch nicht ausreichend unterstützt. Die nächsten Schritte werden derzeit kontrovers diskutiert."
	setcycle 10 RN "<RN>Pfleger*innen</RN>"
	setcycle 10 AN "<AN>Frauen</AN>"
	setcycle 10 Code C6
	setcycle 11 item 2
	setcycle 11 list 6
	setcycle 11 sentence_text "Im Rahmen einer Gesprächsrunde im Gesundheitswesen wird derzeit über aktuelle gesellschaftliche Herausforderungen diskutiert. Die <RN>Pflegekräfte</RN> verdienen bessere Arbeitsbedingungen und benötigen langfristig mehr Unterstützung, doch diese <AN>Männer</AN> fühlen sich politisch nicht ausreichend unterstützt. Die nächsten Schritte werden derzeit kontrovers diskutiert."
	setcycle 11 RN "<RN>Pfleger</RN>"
	setcycle 11 AN "<AN>Männer</AN>"
	setcycle 11 Code C1
	setcycle 12 item 3
	setcycle 12 list 1
	setcycle 12 sentence_text "Auf einer wissenschaftlichen Konferenz zu technischen Zukunftsfragen werden derzeit aktuelle gesellschaftliche Themen erörtert. Die <RN>Ingenieur*innen</RN> spielen eine zentrale Rolle bei der Energiewende und stehen vor Herausforderungen, doch diese <AN>Frauen</AN> lehnen zusätzliche Investitionen ab. Über die Konsequenzen wird weiterhin intensiv gestritten."
	setcycle 12 RN "<RN>Ingenieurinnen</RN>"
	setcycle 12 AN "<AN>Männer</AN>"
	setcycle 12 Code C3
	setcycle 13 item 3
	setcycle 13 list 2
	setcycle 13 sentence_text "Auf einer wissenschaftlichen Konferenz zu technischen Zukunftsfragen werden derzeit aktuelle gesellschaftliche Themen erörtert. Die <RN>Ingenieur*innen</RN> spielen eine zentrale Rolle bei der Energiewende und stehen vor Herausforderungen, doch diese <AN>Frauen</AN> lehnen zusätzliche Investitionen ab. Über die Konsequenzen wird weiterhin intensiv gestritten."
	setcycle 13 RN "<RN>Ingenieurinnen</RN>"
	setcycle 13 AN "<AN>Frauen</AN>"
	setcycle 13 Code C4
	setcycle 14 item 3
	setcycle 14 list 3
	setcycle 14 sentence_text "Auf einer wissenschaftlichen Konferenz zu technischen Zukunftsfragen werden derzeit aktuelle gesellschaftliche Themen erörtert. Die <RN>Ingenieur*innen</RN> spielen eine zentrale Rolle bei der Energiewende und stehen vor Herausforderungen, doch diese <AN>Frauen</AN> lehnen zusätzliche Investitionen ab. Über die Konsequenzen wird weiterhin intensiv gestritten."
	setcycle 14 RN "<RN>Ingenieur*innen</RN>"
	setcycle 14 AN "<AN>Männer</AN>"
	setcycle 14 Code C5
	setcycle 15 item 3
	setcycle 15 list 4
	setcycle 15 sentence_text "Auf einer wissenschaftlichen Konferenz zu technischen Zukunftsfragen werden derzeit aktuelle gesellschaftliche Themen erörtert. Die <RN>Ingenieur*innen</RN> spielen eine zentrale Rolle bei der Energiewende und stehen vor Herausforderungen, doch diese <AN>Frauen</AN> lehnen zusätzliche Investitionen ab. Über die Konsequenzen wird weiterhin intensiv gestritten."
	setcycle 15 RN "<RN>Ingenieur*innen</RN>"
	setcycle 15 AN "<AN>Frauen</AN>"
	setcycle 15 Code C6
	setcycle 16 item 3
	setcycle 16 list 5
	setcycle 16 sentence_text "Auf einer wissenschaftlichen Konferenz zu technischen Zukunftsfragen werden derzeit aktuelle gesellschaftliche Themen erörtert. Die <RN>Ingenieur*innen</RN> spielen eine zentrale Rolle bei der Energiewende und stehen vor Herausforderungen, doch diese <AN>Frauen</AN> lehnen zusätzliche Investitionen ab. Über die Konsequenzen wird weiterhin intensiv gestritten."
	setcycle 16 RN "<RN>Ingenieure</RN>"
	setcycle 16 AN "<AN>Männer</AN>"
	setcycle 16 Code C1
	setcycle 17 item 3
	setcycle 17 list 6
	setcycle 17 sentence_text "Auf einer wissenschaftlichen Konferenz zu technischen Zukunftsfragen werden derzeit aktuelle gesellschaftliche Themen erörtert. Die <RN>Ingenieur*innen</RN> spielen eine zentrale Rolle bei der Energiewende und stehen vor Herausforderungen, doch diese <AN>Frauen</AN> lehnen zusätzliche Investitionen ab. Über die Konsequenzen wird weiterhin intensiv gestritten."
	setcycle 17 RN "<RN>Ingenieure</RN>"
	setcycle 17 AN "<AN>Frauen</AN>"
	setcycle 17 Code C2
	setcycle 18 item 4
	setcycle 18 list 1
	setcycle 18 sentence_text "Bei einem Networking-Event stehen wirtschaftspolitische und gesellschaftliche Fragestellungen im Mittelpunkt der Diskussion. Die <RN>Unternehmer</RN> brauchen weniger bürokratische Hürden und sprechen über Verbesserungen, doch diese <AN>Männer</AN> fordern weitere steuerliche Entlastungen. Die Folgen dieser Positionen bleiben umstritten."
	setcycle 18 RN "<RN>Unternehmerinnen</RN>"
	setcycle 18 AN "<AN>Frauen</AN>"
	setcycle 18 Code C4
	setcycle 19 item 4
	setcycle 19 list 2
	setcycle 19 sentence_text "Bei einem Networking-Event stehen wirtschaftspolitische und gesellschaftliche Fragestellungen im Mittelpunkt der Diskussion. Die <RN>Unternehmer</RN> brauchen weniger bürokratische Hürden und sprechen über Verbesserungen, doch diese <AN>Männer</AN> fordern weitere steuerliche Entlastungen. Die Folgen dieser Positionen bleiben umstritten."
	setcycle 19 RN "<RN>Unternehmer*innen</RN>"
	setcycle 19 AN "<AN>Männer</AN>"
	setcycle 19 Code C5
	setcycle 20 item 4
	setcycle 20 list 3
	setcycle 20 sentence_text "Bei einem Networking-Event stehen wirtschaftspolitische und gesellschaftliche Fragestellungen im Mittelpunkt der Diskussion. Die <RN>Unternehmer</RN> brauchen weniger bürokratische Hürden und sprechen über Verbesserungen, doch diese <AN>Männer</AN> fordern weitere steuerliche Entlastungen. Die Folgen dieser Positionen bleiben umstritten."
	setcycle 20 RN "<RN>Unternehmer*innen</RN>"
	setcycle 20 AN "<AN>Frauen</AN>"
	setcycle 20 Code C6
	setcycle 21 item 4
	setcycle 21 list 4
	setcycle 21 sentence_text "Bei einem Networking-Event stehen wirtschaftspolitische und gesellschaftliche Fragestellungen im Mittelpunkt der Diskussion. Die <RN>Unternehmer</RN> brauchen weniger bürokratische Hürden und sprechen über Verbesserungen, doch diese <AN>Männer</AN> fordern weitere steuerliche Entlastungen. Die Folgen dieser Positionen bleiben umstritten."
	setcycle 21 RN "<RN>Unternehmer</RN>"
	setcycle 21 AN "<AN>Männer</AN>"
	setcycle 21 Code C1
	setcycle 22 item 4
	setcycle 22 list 5
	setcycle 22 sentence_text "Bei einem Networking-Event stehen wirtschaftspolitische und gesellschaftliche Fragestellungen im Mittelpunkt der Diskussion. Die <RN>Unternehmer</RN> brauchen weniger bürokratische Hürden und sprechen über Verbesserungen, doch diese <AN>Männer</AN> fordern weitere steuerliche Entlastungen. Die Folgen dieser Positionen bleiben umstritten."
	setcycle 22 RN "<RN>Unternehmer</RN>"
	setcycle 22 AN "<AN>Frauen</AN>"
	setcycle 22 Code C2
	setcycle 23 item 4
	setcycle 23 list 6
	setcycle 23 sentence_text "Bei einem Networking-Event stehen wirtschaftspolitische und gesellschaftliche Fragestellungen im Mittelpunkt der Diskussion. Die <RN>Unternehmer</RN> brauchen weniger bürokratische Hürden und sprechen über Verbesserungen, doch diese <AN>Männer</AN> fordern weitere steuerliche Entlastungen. Die Folgen dieser Positionen bleiben umstritten."
	setcycle 23 RN "<RN>Unternehmerinnen</RN>"
	setcycle 23 AN "<AN>Männer</AN>"
	setcycle 23 Code C3
	setcycle 24 item 5
	setcycle 24 list 1
	setcycle 24 sentence_text "Im Rahmen einer Geschäftsveranstaltung findet derzeit ein Austausch über Arbeitsbedingungen und gesellschaftliche Entwicklungen statt. Die <RN>Arbeitnehmer*innen</RN> erwarten höhere Gehälter und klimatisierte Arbeitsplätze, nichtsdestotrotz wollen diese <AN>Männer</AN> auch weniger arbeiten. Die Frage nach den Konsequenzen bleibt offen."
	setcycle 24 RN "<RN>Arbeitnehmer*innen</RN>"
	setcycle 24 AN "<AN>Männer</AN>"
	setcycle 24 Code C5
	setcycle 25 item 5
	setcycle 25 list 2
	setcycle 25 sentence_text "Im Rahmen einer Geschäftsveranstaltung findet derzeit ein Austausch über Arbeitsbedingungen und gesellschaftliche Entwicklungen statt. Die <RN>Arbeitnehmer*innen</RN> erwarten höhere Gehälter und klimatisierte Arbeitsplätze, nichtsdestotrotz wollen diese <AN>Männer</AN> auch weniger arbeiten. Die Frage nach den Konsequenzen bleibt offen."
	setcycle 25 RN "<RN>Arbeitnehmer*innen</RN>"
	setcycle 25 AN "<AN>Frauen</AN>"
	setcycle 25 Code C6
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	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Führt eine Anzahl von Elementen in einer Sequenz aus"
	run list_filter True
	run sentence_script "[skip_trial] = 0"
	run sentence_pygaze_log "[skip_trial] = 0"
	run question_sketchpad "[skip_trial] = 0"
	run question_pygaze_log "[skip_trial] = 0"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Stimuli anzeigen"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=True text="We are studying how linguistic style influences political perception and party attribution. <br />" x=0 y=0 z_index=0

